// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 5)
(ImagePyramidSchedule 16 16 1 8 8 1 4 4 1 2 2 1 1 1 1)

// ********** Transform

(GridSpacingSchedule 8.0 4.0 4.0 2.0 1.0)

//*********
(NumberOfHistogramBins 64 )
(FixedKernelBSplineOrder 3) 
(MovingKernelBSplineOrder 3) 

// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 2000)

(NoiseCompensation "true")
(AutomaticParameterEstimation "true")
(NumberOfSamplesForNoiseCompensationFactor 105000)
(UseAdaptiveStepSizes "true")

// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(ResultImageFormat "nii.gz")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")

// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(SampleRegionSize 10.0 10.0 10.0)
(MaximumNumberOfSamplingAttempts 20)

// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
